PsychoPy2experiment version="1.80.03"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'participant': u'1', u'Name': u'Leo'}
  expName = main
  Units = use prefs
  Screen = 1
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Routines
  Routine reset
    TextComponent Fixation_point
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine Fixation_point_2
    TextComponent text_3
      color = red
      text = +
      stopVal [duration (s)] = 0.500
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine feedback
    TextComponent text_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1.replace('...', $TW) +
        '\n\n' +
        'P2: ' + $premise2.replace('...', $TW) +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
  Routine istruzioni
    TextComponent text_5
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
                                     Istruzioni

        Leggerete degli argomenti composti da due premesse (P1 e P2) e una conclusione (C). Alle premesse manca un termine. Premete sulla barra spaziatrice per leggere il termine mancante. Giudicate poi se la conclusione segue dalle premesse, rispondendo:

          SI (La conclusione segue dalle premesse) -> premete sul tasto [q]
         oppure:
          NO (La conclusione NON segue dalle premesse) -> premete sul tasto [p]

         Dovrete rispondere il più precisamente e il più velocemente possibile.
    TextComponent text_6
      color = yellow
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Premere la barra spaziatrice per continuare
    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine question
    TextComponent question_text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.09
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      text:
        La conclusione segue dalla premesse?
    KeyboardComponent response_to_question_text
      forceEndRoutine = True
      allowedKeys = 'q', 'p'
      startVal [time (s)] = 0.0
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    TextComponent response_to_question
      color = yellow
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        [q] <- SI          NO -> [p]
  Routine trial
    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    TextComponent Introduction
      startVal [time (s)] = 0.5
      letterHeight = 0.09
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      text:
                            Benvenuti!

        State per iniziare un esperimento composto da due parti.
        Ogni parte è introdotta dalle istruzioni che vi spiegheranno ciò che dovete fare in seguito.
        Alla fine della prima parte, ci sarà una piccola pausa indicata da un messaggio. Grazie per la vostra partecipazione all'esperimento!
    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.5
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    CodeComponent code
      Begin Experiment:
        import utils.shuffleRows as shuffleRows
        file_input = ['./stimuli/arguments.csv', './stimuli/distractors.csv']
        file_output = '/tmp/arguments.csv'
        shuffleRows.ShuffleRows(file_input, file_output)
    TextComponent text_4
      color = yellow
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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      text:
        Premere la barra spaziatrice per continuare
  Routine arguments
    TextComponent text
      startVal [time (s)] = 0.0
      font = Arial Narrow
      letterHeight = 0.1
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      text [set every repeat]:
        'P1: ' + $premise1 +
        '\n\n' +
        'P2: ' + $premise2 +
        '\n_______________________________\n\n' +
        'C: ' + $conclusion
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'y','n','left','right','space'
      startVal [time (s)] = 0.0
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    TextComponent missing_word_text
      color = yellow
      startVal [time (s)] = 0.0
      letterHeight = 0.06
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      text:
        Premete la barra spaziatrice per visualizzare la parola mancante.
Flow
  Routine trial
  Routine istruzioni
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../../../../../private/tmp/arguments.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [{'ArgumentType': u'TPTC', 'ArgumentNumber': 1, 'TWType': u'V', 'premise2': u'Una ... \xe8 vivace ', 'TW': u'SAMBA', 'premise1': u'La gioia \xe8 una ... ', 'CorrectAnswer': u'Y', 'ArgumentBlock': u'P', 'conclusion': u'La gioia \xe8 vivace'},
      {'ArgumentType': u'TPFC', 'ArgumentNumber': 2, 'TWType': u'V', 'premise2': u'Una ... Scende dalla nave ', 'TW': u'SCIALUPPA', 'premise1': u'Il conforto \xe8 una ... ', 'CorrectAnswer': u'N', 'ArgumentBlock': u'P', 'conclusion': u'Il conforto scende dalla nave'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 2, 'TWType': u'distrattore', 'premise2': u'Una ... \xe8 una donna sposata ', 'TW': u'MOGLIE', 'premise1': u'Luigi ha una ... ', 'CorrectAnswer': u'N', 'ArgumentBlock': u'P', 'conclusion': u'Luigi \xe8 una donna sposata'},
      {'ArgumentType': u'distrattore', 'ArgumentNumber': 1, 'TWType': u'distrattore', 'premise2': u'... \xe8 una scienza ', 'TW': u'MEDICINA', 'premise1': u'Franco studia ...  ', 'CorrectAnswer': u'Y', 'ArgumentBlock': u'P', 'conclusion': u'Franco studia una scienza'},
      {'ArgumentType': u'TPPC', 'ArgumentNumber': 2, 'TWType': u'L', 'premise2': u'Un ... consente il riposo ', 'TW': u'APPRODO', 'premise1': u'La laurea \xe8 un ... ', 'CorrectAnswer': u'N', 'ArgumentBlock': u'P', 'conclusion': u'La laurea consente il riposo'}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
    Routine arguments
    Routine feedback
    Routine question
    Routine Fixation_point_2
  LoopTerminator trials
